PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Word Priming Task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent StudySlider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_submit
      letterHeight = 0.05
      pos = (0,-0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_submit
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'glue'},
      {'study_word': 'ballet '},
      {'study_word': 'prawn'},
      {'study_word': 'hammer'},
      {'study_word': 'candle'},
      {'study_word': 'thorn'},
      {'study_word': 'pencil'},
      {'study_word': 'daughter'},
      {'study_word': 'mouse'},
      {'study_word': 'milk'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': '_l_e', 'reference': 'glue', 'old_new': 'old'},
      {'test_word': '_a_l_t', 'reference': 'ballet', 'old_new': 'old'},
      {'test_word': 'p_a_n', 'reference': 'prawn', 'old_new': 'old'},
      {'test_word': '_a_m_r', 'reference': 'hammer', 'old_new': 'old'},
      {'test_word': 'c_n_l_', 'reference': 'candle', 'old_new': 'old'},
      {'test_word': '_h_r_', 'reference': 'thorn', 'old_new': 'old'},
      {'test_word': '_e_c_l', 'reference': 'pencil', 'old_new': 'old'},
      {'test_word': 'd_u_h_e_', 'reference': 'daughter', 'old_new': 'old'},
      {'test_word': '_o_s_', 'reference': 'mouse', 'old_new': 'old'},
      {'test_word': 'm_l_', 'reference': 'milk', 'old_new': 'old'},
      {'test_word': 'h_u_d', 'reference': 'hound', 'old_new': 'new'},
      {'test_word': '_u_p_t', 'reference': 'puppet', 'old_new': 'new'},
      {'test_word': '_i_e', 'reference': 'wise', 'old_new': 'new'},
      {'test_word': 's_a_e', 'reference': 'share', 'old_new': 'new'},
      {'test_word': '_r_e_d', 'reference': 'bread', 'old_new': 'new'},
      {'test_word': '_ro_a', 'reference': 'aroma', 'old_new': 'new'},
      {'test_word': '_hin_', 'reference': 'shine', 'old_new': 'new'},
      {'test_word': '_u_n', 'reference': 'turn', 'old_new': 'new'},
      {'test_word': 't_u_h', 'reference': 'touch', 'old_new': 'new'},
      {'test_word': 'g_ou_', 'reference': 'group', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
